PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = stroop
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instruct
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0
      units = height
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine trial
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    TextComponent word
      color [set every repeat] = $letterColor
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
      units = height
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    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine thanks
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    TextComponent thanksText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = height
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'text': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'text': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'text': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'text': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'text': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'text': 'red ', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'text': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'text': 'green', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'text': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'text': 'blue', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'text': 'blue', 'letterColor': 'blue', 'corrAns': 'left', 'congruent': 1}]
    Routine trial
  LoopTerminator trials
  Routine thanks
